instrument:
  channels:
    '488':
      cameras:
      - Iris15
      filters:
      - BP488
      lasers:
      - 488nm
    '561':
      cameras:
      - Iris15
      filters:
      - BP561
      lasers:
      - 561nm
    '639':
      cameras:
      - Iris15
      filters:
      - LP638
      lasers:
      - 639nm
  devices:
    639nm:
      color: red
      driver: voxel.devices.laser.simulated
      init:
        id: COM7
        wavelength: 639
      module: SimulatedLaser
      type: laser
    ZWO-EWF:
      driver: voxel.devices.filterwheel.simulated
      init:
        filters:
          BP405: 0
          BP488: 1
          BP561: 2
          Empty1: 5
          Empty2: 6
          LP638: 3
          MB405/488/561/638: 4
        id: 0
      module: FilterWheel
      type: filter_wheel
      subdevices:
        BP405:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP405
        BP488:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP488
        BP561:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: BP561
        LP638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: LP638
        MB405/488/561/638:
          type: filter
          driver: voxel.devices.filter.simulated
          module: Filter
          init:
            id: MB405/488/561/638
    ASI-Tiger-X:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: x
        instrument_axis: x
      module: Stage
      properties:
        speed_mm_s: 1.0
      type: scanning_stage
    ASI-Tiger-Z:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: z
        instrument_axis: z
      module: Stage
      properties:
        speed_mm_s: 1.0
      type: tiling_stage
    ASI-Tiger-Y:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: y
        instrument_axis: y
      module: Stage
      properties:
        speed_mm_s: 1.0
      type: tiling_stage
    ASI-Tiger-F:
      driver: voxel.devices.stage.simulated
      init:
        hardware_axis: f
        instrument_axis: f
      module: Stage
      properties:
        speed_mm_s: 1.0
      type: focusing_stage
    PCIe-6738:
      driver: voxel.devices.daq.simulated
      init:
        dev: Dev2
      properties:
        ao_max_volts: 5.0
        ao_min_volts: -5.0
        tasks:
          ao_task:
            name: ao task
            ports:
              L tunable lens:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 0.5
                      '561': 0.55
                      '639': 0.45
                  offset_volts:
                    channels:
                      '488': 2.5
                      '561': 2.6
                      '639': 2.4
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 100
                      '561': 100
                      '639': 100
                port: ao0
                waveform: sawtooth
              R tunable lens:
                device_max_volts: 5.0
                device_min_volts: 0.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 0.5
                      '561': 0.55
                      '639': 0.45
                  offset_volts:
                    channels:
                      '488': 2.5
                      '561': 2.6
                      '639': 2.4
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 100
                      '561': 100
                      '639': 100
                port: ao1
                waveform: sawtooth                
              L galvo mirror:
                device_max_volts: 5.0
                device_min_volts: -5.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 1.0
                      '561': 1.0
                      '639': 1.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 100
                      '561': 100
                      '639': 100
                  offset_volts:
                    channels:
                      '488': 0.0
                      '561': 0.0
                      '639': 0.0
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                port: ao2
                waveform: triangle wave
              R galvo mirror:
                device_max_volts: 5.0
                device_min_volts: -5.0
                parameters:
                  amplitude_volts:
                    channels:
                      '488': 1.0
                      '561': 1.0
                      '639': 1.0
                  cutoff_frequency_hz:
                    channels:
                      '488': 100
                      '561': 100
                      '639': 100
                  offset_volts:
                    channels:
                      '488': 0.0
                      '561': 0.0
                      '639': 0.0
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 10.0
                      '561': 10.0
                      '639': 10.0
                port: ao3
                waveform: triangle wave                
            timing:
              period_time_ms: 200
              rest_time_ms: 50
              retriggerable: 'on'
              sample_mode: finite
              sampling_frequency_hz: 10000
              trigger_mode: 'on'
              trigger_polarity: rising
              trigger_port: PFI0
          co_task:
            counters:
              - ctr0
            name: co task
            timing:
              frequency_hz: 2.0
              output_port: PFI0
              trigger_mode: 'off'
          do_task:
            name: do task
            ports:
              laser:
                parameters:
                  end_time_ms:
                    channels:
                      '488': 200.0
                      '561': 200.0
                      '639': 200.0
                  start_time_ms:
                    channels:
                      '488': 100.0
                      '561': 100.0
                      '639': 100.0
                port: port0
                waveform: square wave
            timing:
              period_time_ms: 500
              rest_time_ms: 50
              retriggerable: 'on'
              sample_mode: finite
              sampling_frequency_hz: 10000
              trigger_mode: 'on'
              trigger_polarity: rising
              trigger_port: PFI0
      module: DAQ
      type: daq
    488nm:
      color: purple
      driver: voxel.devices.laser.simulated
      init:
        wavelength: 488
        coefficients:
          0: -57.515
          1: 3.218
        id: COM6
        prefix: L6
      module: SimulatedLaser
      properties:
        cdrh: 'OFF'
        constant_current: 'ON'
        modulation_mode: digital
      type: laser
    561nm:
      color: greenyellow
      driver: voxel.devices.laser.simulated
      init:
        id : COM3
        wavelength: 561
        prefix: L3
      module: SimulatedLaser
      type: laser
    tigerbox:
      driver: voxel.devices.stage.simulated
      module: Joystick
      type: joystick
    Iris15:
      driver: voxel.devices.camera.simulated
      init:
        id: sim000
      module: Camera
      properties:
        exposure_time_ms: 20.0
        pixel_type: mono16
        height_offest_px: 4744
        height_px: 5056
        width_offset_px: 6528
        width_px: 2960
        trigger:
          mode: 'off'
          polarity: rising
          source: external
      type: camera
  id: exaspim-01
  master_device: Iris15
